PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['UPN-ID'], expName, expInfo['date'])
  Experiment info = {'UPN-ID': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = bw@home
  Screen = 2
  Units = height
  Use version = 2025.1.1
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  consoleLoggingLevel = debug
  expName = MR_AUT
  keyboardBackend = PsychToolbox
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine thx
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    TextComponent thx_txt
      durationEstim = 5
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Vielen Dank,

        dieser Teil der Untersuchung ist zu Ende.
    KeyboardComponent thx_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thx_hint
      color = $[-0.25,-0.25,-0.25]
      letterHeight = 0.025
      pos = (.25, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Beenden mit Enter
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  Routine p_start
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    TextComponent p_start_txt
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Es folgt ein Übungsbeispiel
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    KeyboardComponent p_start_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent p_start_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, -.45)
      startVal [time (s)] = 0.0
      text = Weiter mit Leertaste
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  Routine ruhe_fixation
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    TextComponent rf_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rfDur
      text = +
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  Routine instr
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    ParallelOutComponent i_mrk
      address = 0x3FF8
      register = EIO
      startData = iMarker
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.25
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent i_img
      image [set every repeat] = $iSlide
      size = (1.77,1)
      startVal [time (s)] = 0.0
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    TextComponent i_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, -.45)
      startVal [time (s)] = 0
      text = Weiter mit Leertaste
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    KeyboardComponent i_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine p_idea_recording
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    CodeComponent rec_code
      Code Type = Py
      disabled = True
      Begin Experiment:
        ##  Audio recording parameters
        sample_rate = 44100  # Sample rate (Hz)
        channels = 2         # Number of audio channels (2 for stereo)

        ##  Create a directory for recordings if it doesn't exist
        recordings_dir = "audio_recordings"
        if not os.path.exists(recordings_dir):
            os.makedirs(recordings_dir)
      Begin Routine:
        ##  Total runtime limit (3 minutes)
        total_runtime = 1 * 60  # 'n' minutes in seconds
        #program_start_time = datetime.now()
        practice_start_time = core.getTime()
        #practice_end_time = program_start_time + timedelta(seconds=total_runtime)
        practice_end_time = practice_start_time + total_runtime

        ##  Counter for recording enumeration
        recording_count = 1

        print("Audio Recorder - Press and hold SPACEBAR to record, release to stop")
        print(f"Program will automatically exit after {total_runtime//60} minutes")
      Each Frame:
        ##  bws code snippet  ##
        ##if core.getTime() > p_startTime + p_loopDur:
        ##    #print(p_startTime + p_loopDur)
        ##    p_finish = True
        ##    #print("p_finish = 1")
        ##    continueRoutine = False # finish p_trial

        #while datetime.now() < program_end_time:
        while core.getTime() < practice_end_time:
        #    # Calculate and display remaining time
        #    time_remaining = (practice_end_time - datetime.now()).total_seconds()
        #    if int(time_remaining) % 30 == 0:  # Show time remaining every 30 seconds
        #        print(f"Time remaining: {int(time_remaining)} seconds")

            ## check for keypresses
            p_response = event.getKeys()

            if p_response:

                # Check for quit command
                if 'escape' or 'q' in p_response:
                    continueRoutine = False

                # get last key in p_response
                p_resp_key = p_response.pop()

                """
                for thisKey in p_response:
                    if thisKey==' ':  # it is equivalent to the string 'q'
                        print('space-key-press:', thisKey.name, thisKey.tDown, thisKey.rt)
                    else:
                        print(thisKey.name, thisKey.tDown, thisKey.rt)
                """


                ##  Check for recording command (spacebar)  ##
                #if keyboard.is_pressed('space'):
                if p_resp_key == 'space':
                    ## Generate filename with enumeration and timestamp
                    #timestamp = datetime.now().strftime("%Y%m%d_%H%M%S")
                    timestamp = data.getDateStr(format="%H:%M:%S.%m")

                    filename = os.path.join(recordings_dir, f"{recording_count:02d}_recording_{timestamp}.wav")

                    # Start recording
                    print(f"Recording #{recording_count} started... (Release SPACEBAR to stop)")
                    audio_data = []

                    # Record audio stream
                    with sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: audio_data.append(indata.copy())):
                        # Continue recording until spacebar is released or program time limit is reached
                        while keyboard.is_pressed('space') and datetime.now() < program_end_time:
                            time.sleep(0.01)  # Small delay to prevent CPU overuse

                    # Check if we've reached the program time limit
                    if datetime.now() >= program_end_time:
                        print("Program time limit reached during recording")

                    if audio_data:
                        # Convert list of numpy arrays into one large numpy array
                        recording = np.concatenate(audio_data, axis=0)

                        # Save the recording to a file
                        sf.write(filename, recording, sample_rate)
                        print(f"Recording #{recording_count} saved to {filename}")
                        recording_count += 1  # Increment the recording counter
                    else:
                        print("Recording too short - nothing saved")

            time.sleep(0.01)  # Small delay in main loop to prevent CPU overuse
      End Routine:
        print(f"\nProgram ended after {total_runtime//60} minutes")
  Routine p_idea
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    CodeComponent p_code
      Code Type = Py
      Begin Experiment:
        import sounddevice as sd
        import soundfile as sf
        import time

        ## set audio recording parameters
        sample_rate = 44100  # Sample rate (Hz)
        channels = 1         # Number of audio channels (2 for stereo)

        ## get/access the keyboard
        p_kb = keyboard.Keyboard()
      Begin Routine:
        ##  flags for spacekey  ##
        #p_spacedown = False
        #p_spaceup = True

        p_is_recording = False

        ##  Counter for recording enumeration
        p_recording_count = 1

        ##  get start-time for 'p-...'-routine
        p_startTime = core.getTime()
      Each Frame:
        ##  check the loop-time  ##
        if core.getTime() > p_startTime + p_loopDur:
            p_spacedown = False
            continueRoutine = False # finish p_trial

        ##  check for keypresses/-states  ##
        p_response = p_kb.getKeys() # get a list of keys pressed at this instant
        p_spacebar = p_kb.getState('space')

        ##  check for 'escape'
        if p_response:
            if 'escape' in p_response:
                continueRoutine = False


        ##  check the 'spacebar'-key responses  ##
        ## check for presses
        if p_spacebar:

            while p_spacebar: # and core.getTime() < p_startTime + p_loopDur:
            #while is_recording and core.getTime() < p_startTime + p_loopDur:
                time.sleep(0.01)                        # Small delay to prevent CPU overuse (from ai)
                p_spacebar = p_kb.getState('space')

            ##toggle recording state
            p_is_recording = not p_is_recording

            if p_is_recording:
                p_FZ.color = 'green'
                win.flip()

                ## start recording / record audio stream
                p_audio_data = []

                #prev. ver: spacekey↓record-on>>spacekey↑-record-off # # # with sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: audio_data.append(indata.copy())):
                p_stream = sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: p_audio_data.append(indata.copy()))
                p_stream.start()

            # Stop the current recording
            else:
                p_FZ.color = 'white'
                win.flip()

                p_stream.stop()
                p_stream.close()
                if p_audio_data:
                    save_recording(p_audio_data, p_recording_count, wavDirName, sample_rate)
                    p_recording_count += 1
                    p_audio_data = []   # Nach der Speicherung
                else:
                    print("Recording too short - nothing saved")


            # Check if we've reached the time limit
            if core.getTime() > p_startTime + p_loopDur and p_is_recording:
                # Stop recording if we hit the time limit during a recording
                p_stream.stop()
                p_stream.close()
                if p_audio_data:
                    save_recording(p_audio_data, p_recording_count, recordings_dir, sample_rate)
                    p_recording_count += 1
                    p_audio_data = []   # Nach der Speicherung
                print("Program time limit reached during recording")

            time.sleep(0.01)  # Small delay in main loop to prevent CPU overuse


        ###   save_recording   ###
        def save_recording(p_audio_data, p_recording_count, recordings_dir, sample_rate):
            """Helper function to save a recording"""
            if not p_audio_data:
                return False

            # Convert list of numpy arrays into one large numpy array
            p_recording = np.concatenate(p_audio_data, axis=0)

            ## prepare the recording
            # ## Generate filename with enumeration and timestamp
            # timestamp = datetime.now().strftime("%Y%m%d_%H%M%S")
            # timestamp = data.getDateStr(format="%Y-%m-%d_%H%M")   #local: set/mark start of current run
            #audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_idea{recording_count:02d}_{timestamp}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'
            p_audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_idea{p_recording_count:02d}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'

            # Save the recording to a file
            sf.write(p_audio_file, p_recording, sample_rate)
            print(f"Recording #{p_recording_count} saved to {p_audio_file}")

            return True
    TextComponent p_FZ
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = ?
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  Routine smry
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    ImageComponent smry_img
      disabled = True
      image = stim/instr/Instr4.JPG
      size = (1.77,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent smry_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    TextComponent smry_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, -.45)
      startVal [time (s)] = 0
      text = Weiter mit Leertaste
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  Routine start
    RoutineSettingsComponent start
      disabled = True
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    TextComponent start_txt
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Es folgen die Testdurchgänge
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    KeyboardComponent start_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine t_item
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    ParallelOutComponent t_fix_mrk
      address = 0x3FF8
      register = EIO
      startData = 10
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 0.25
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent t_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    ParallelOutComponent t_item_mrk
      address = 0x3FF8
      register = EIO
      startData = all_items[trials.thisN][mrk]
      startVal [condition] = t_fixation.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.25
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent t_item_img
      disabled = True
      image [set every repeat] = $'stim\\items\\%s.jpg' % (all_items[trials.thisN][itm])
      size = (1.77,1)
      startVal [condition] = t_fixation.status==FINISHED
      stopVal [duration (s)] = $itemDur
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    TextComponent AUTitem
      letterHeight = 0.05
      startVal [condition] = t_fixation.status==FINISHED
      stopVal [duration (s)] = $itemDur
      text [set every repeat] = $MR_AUT_item
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  Routine settings
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    CodeComponent set_things
      Code Type = Py
      Begin Experiment:
        ##  some start time info
        print(data.getDateStr(format="%H:%M:%S.%m"))   #local: set/mark start of current run

        ##  enable parallel port for markers  ##
        from psychopy import parallel
        t_mrk = parallel.ParallelPort(address='0x3FF8')

        ##  initialise microphone  ##
        deviceManager.addDevice(
            deviceClass='psychopy.hardware.microphone.MicrophoneDevice',
            deviceName='mic', index=None, exclusive=False,
        )

        #fn = os.path.join(_thisDir, 'data', expInfo['UPN-ID'], expName, data.getDateStr(format="%Y-%m-%d_%H%M"))
        custom_fn = '%s_%s_%s_%s' % (os.path.join(_thisDir, 'data', ''), expInfo['UPN-ID'], expName, data.getDateStr(format="%Y-%m-%d_%H%M"))
        #print(f'{fn=}')

        wavDirName = custom_fn + '_wav'
        if not os.path.isdir(wavDirName):
            os.makedirs(wavDirName)  # to hold .wav files
        #print("wavDirName"); print(wavDirName)

        ##  make microphone object for mic  #
        idea_mic = sound.microphone.Microphone(
            device='mic',
            name='idea_mic',
            #recordingFolder=micRecFolder,
            recordingFolder=wavDirName,
            recordingExt='wav'
        )

        ## ### Options for DEBUG/RESARCH-mode ###
        DEBUG = 1 #0=research-mode; 1=debug-mode
        if DEBUG:
            loopDur = 7 #total time for ideas
            p_loopDur= 7#30 #total time for ideas
            itemDur = 2
            fixDur  = 1
            rfDur   = 2 #ruhe+fixation nach 3 items
        else:
            loopDur = 180 #total time for ideas
            p_loopDur = 60 #total time for ideas
            itemDur = 30
            fixDur  = 10
            rfDur   = 180 #ruhe+fixation nach 3 items

        show_rf = 0 #rf= rest + fixation after 3 items/trials


        header_pos_y = .40
        main_pos_y   = 0
        btn_pos_y    = -.25
        hint_pos_y   = -.45

        ##  quasi-random item shuffle  ##
        #creaLying_cats = {
        #    "Pro": ["stim\items\Pro1.jpg", "stim\items\Pro2.jpg"],
        #    "Self": ["stim\items\Self1.jpg", "stim\items\Self2.jpg"],
        #    "Anti": ["stim\items\Anti1.jpg", "stim\items\Anti2.jpg"]}

        itm = 0 #item
        mrk = 1 #marker-code for item
        creaLying_cats = {
            ##cat.   [item,marker]     #short description of list
            "Pro":  [["Pro1",43], ["Pro2",44]],
            "Self": [["Self1",45], ["Self2",46]],
            "Anti": [["Anti1",41], ["Anti2",42]]}

        all_items = []      #empty list
        assigned_cat = {}   #empty dict
        for category, items in creaLying_cats.items():
            all_items.extend(items)
            for item, item_mrk in items:
                assigned_cat[item] = category

        done = False
        while not done:
            shuffle(all_items)
            valid = True
            for i in range(len(all_items) - 1):
                #if assigned_cat[all_items[i]] == assigned_cat[all_items[i+1]]:
                if assigned_cat[all_items[i][itm]] == assigned_cat[all_items[i+1][itm]]:
                    valid = False
                    break
            if valid:
                #print(f'{all_items=}')
                done = True
  Routine t_idea
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    CodeComponent t_code
      Code Type = Py
      Begin Experiment:
        """
        import sounddevice as sd
        import soundfile as sf
        import time

        ## set audio recording parameters
        sample_rate = 44100  # Sample rate (Hz)
        channels = 1         # Number of audio channels (2 for stereo)
        """


        ## get/access the keyboard
        t_kb = keyboard.Keyboard()
      Begin Routine:
        ##  flags for spacekey  ##
        #t_spacedown = False
        #t_spaceup = True

        is_recording = False

        ##  Counter for recording enumeration
        recording_count = 1

        ##  get start-time for 't-...'-routine
        t_startTime = core.getTime()

        t_FZ.color = 'white'
        win.flip()

        ##t_mrk: START Nachdenkphase
        t_mrk.setData(50); core.wait(0.1); t_mrk.setData(0)


        ## Vor dem ersten Aufruf von getKeys() und getState() in "each frame"
        t_kb.clearEvents(eventType='keyboard')  # Lösche alle vorherigen Tasteneingaben
      Each Frame:
        ##  check the loop-time  ##
        if core.getTime() > t_startTime + loopDur:
            ##t_mrk: STOP
            t_mrk.setData(49); core.wait(0.1); t_mrk.setData(0)
            save_recording(audio_data, recording_count, wavDirName, sample_rate)
            is_recording = False
            continueRoutine = False # finish p_trial

        ##  check for keypresses/-states  ##
        t_response = t_kb.getKeys() # get a list of keys pressed at this instant
        t_spacebar = t_kb.getState('space')

        ##  check for 'escape'
        if t_response:
            if 'escape' in t_response:
                continueRoutine = False


        ##  check the 'spacebar'-key responses  ##
        ## check for presses
        if t_spacebar:

            while t_spacebar: # and core.getTime() < t_startTime + t_loopDur:
            #while is_recording and core.getTime() < t_startTime + t_loopDur:
                time.sleep(0.01)                        # Small delay to prevent CPU overuse (from ai)
                t_spacebar = t_kb.getState('space')

            ##toggle recording state
            is_recording = not is_recording

            if is_recording:
                ##t_mrk: START
                t_mrk.setData(48); core.wait(0.1); t_mrk.setData(0)

                ## start recording / record audio stream
                audio_data = []

                #prev. ver: spacekey↓record-on>>spacekey↑-record-off # # # with sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: audio_data.append(indata.copy())):
                stream = sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: audio_data.append(indata.copy()))
                stream.start()

                ##after recording started, flip to green '?'
                t_FZ.color = 'green'
                win.flip()

            # Stop the current recording
            else:
                ##before recording stops, bakc to white '?'
                t_FZ.color = 'white'
                win.flip()

                ## stop recording / stop audio stream
                stream.stop()
                stream.close()
                if audio_data:
                    save_recording(audio_data, recording_count, wavDirName, sample_rate)
                    recording_count += 1
                    audio_data = []   # Nach der Speicherung
                else:
                    print("Recording too short - nothing saved")
                ##t_mrk: STOP
                t_mrk.setData(49); core.wait(0.1); t_mrk.setData(0)


            # Check if we've reached the time limit
            if core.getTime() > t_startTime + loopDur and is_recording:
                # Stop recording if we hit the time limit during a recording
                stream.stop()
                stream.close()
                if audio_data:
                    save_recording(audio_data, recording_count, wavDirName, sample_rate)
                    recording_count += 1
                    audio_data = []   # Nach der Speicherung
                ##t_mrk: STOP
                t_mrk.setData(49); core.wait(0.1); t_mrk.setData(0)

                print("Program time limit reached during recording")

            time.sleep(0.01)  # Small delay in main loop to prevent CPU overuse


        ###   save_recording   ###
        def save_recording(audio_data, recording_count, recordings_dir, sample_rate):
            """Helper function to save a recording"""
            if not audio_data:
                return False

            # Convert list of numpy arrays into one large numpy array
            recording = np.concatenate(audio_data, axis=0)

            ## prepare the recording
            # ## Generate filename with enumeration and timestamp
            # timestamp = datetime.now().strftime("%Y%m%d_%H%M%S")
            # timestamp = data.getDateStr(format="%Y-%m-%d_%H%M")   #local: set/mark start of current run
            #audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_idea{recording_count:02d}_{timestamp}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'
            audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_{all_items[trials.thisN][0]}_idea{recording_count:02d}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'

            # Save the recording to a file
            sf.write(audio_file, recording, sample_rate)
            print(f"Recording #{recording_count} saved to {audio_file}")
            return True


        #################################################################################################################################################################
        ##    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###   ##
        #################################################################################################################################################################

        """
        ## ### check the loop-time ###
        if core.getTime() > t_startTime + loopDur:
            continueRoutine = False # finish p_trial

        ## ### check for keypresses ###
        t_response = t_kb.getKeys() # get a list of keys pressed at this instant
        t_spacebar = t_kb.getState('space')

        ## check for 'escape'
        if t_response:
            if 'escape' in t_response:
                continueRoutine = False


        ##  check the 'spacebar'-key responses  ##
        ## check for presses
        if t_spacebar and not t_spacedown:
            if not t_spacedown:
                t_spacedown = True
                t_spaceup = False
                t_FZ.color = 'green'
                win.flip()

            ## prepare the recording
            # timestamp = data.getDateStr(format="%Y-%m-%d_%H%M")   #local: set/mark start of current run
            #audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_idea{recording_count:02d}_{timestamp}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'
            audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_{all_items[trials.thisN][0]}_idea{recording_count:02d}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'

            ## start recording
            audio_data = []

            # Record audio stream
            with sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: audio_data.append(indata.copy())):
                ## Continue recording until spacebar is released or loop-time is over
                while t_spacebar and core.getTime() < t_startTime + loopDur:
                    time.sleep(0.01)  # Small delay to prevent CPU overuse
                    t_spacebar = p_kb.getState('space')

            if audio_data:
                ## Convert list of numpy arrays into one large numpy array
                recording = np.concatenate(audio_data, axis=0)

                ## Save the recording to a file
                sf.write(audio_file, recording, sample_rate)
                recording_count += 1  # Increment the recording counter
            else:
                print("Recording too short - nothing saved")


        ## check for releases
        elif not t_spacebar and not t_spaceup:
            t_spacedown = False
            t_spaceup = True
            t_FZ.color = 'white'
            win.flip()
        """
    TextComponent t_FZ
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = ?
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  Routine p_item1
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    ParallelOutComponent p_item1_mrk
      address = 0x3FF8
      register = EIO
      startData = 20
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.25
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent p_item1_img
      disabled = True
      image = stim/Probe1.JPG
      size = (1.77,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent p_item1_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent p_item1_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, -.45)
      startVal [time (s)] = 0.0
      text = Weiter mit Leertaste
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  Routine p_item2
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    ParallelOutComponent p_fix_mrk
      address = 0x3FF8
      register = EIO
      startData = 0
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 0.25
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent p_fixation
      durationEstim = $fixDur
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = +
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    ParallelOutComponent p_item2_mrk
      address = 0x3FF8
      register = EIO
      startData = 20
      startVal [condition] = p_fixation.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.25
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent p_item2_img
      disabled = True
      image = stim/Probe2.JPG
      size = (1.77,1)
      startVal [condition] = p_fixation.status==FINISHED
      stopVal [duration (s)] = $itemDur
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  Routine AUT_rating
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    CodeComponent AUTrating_code
      Code Type = Py
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      End Routine:
        ##  marker: AUTrating STOP  ##
        t_mrk.setData(57); core.wait(0.1); t_mrk.setData(0)
    TextComponent r_header_txt
      letterHeight = 0.045
      pos = (0, header_pos_y)
      startVal [time (s)] = 0.0
      text = Wie kreativ findest Du Deine Antwort
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    SliderComponent VASrating
      color = black
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 0.7035
      pos = (0, main_pos_y)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = 0,1,2,3,4,5,6,7,8,9,10
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    KeyboardComponent r_end_key
      allowedKeys = 'w','return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent r1_mouse
      clickable = r1_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = VASrating.getMouseResponses() != None
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    TextComponent l_label
      color = darkgreen
      letterHeight = 0.03
      pos = (-.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = gar nicht kreativ
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    TextComponent r_label
      color = darkgreen
      letterHeight = 0.03
      pos = (.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = sehr kreativ
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    PolygonComponent r1_btn
      fillColor = $[1,1,1]
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
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    TextComponent rating_hint
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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Flow
  Routine settings
  LoopInitiator byp_start loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 0
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    LoopInitiator ins_loop loopType="TrialHandler"
      conditionsFile = stim/CreaLying_instr.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('iSlide', 'stim\\instr\\Instr1.JPG'), ('iMarker', np.int64(1))]),
        OrderedDict([('iSlide', 'stim\\instr\\Instr2.JPG'), ('iMarker', np.int64(2))]),
        OrderedDict([('iSlide', 'stim\\instr\\Instr3.JPG'), ('iMarker', np.int64(3))])]
      Routine instr
    LoopTerminator ins_loop
    LoopInitiator ps_byp loopType="TrialHandler"
      loopType = random
      nReps = 0
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      Routine p_start
    LoopTerminator ps_byp
  LoopTerminator byp_start
  LoopInitiator pract_byp loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine p_item1
    Routine p_item2
    LoopInitiator byp_p_idea_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 1
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      LoopInitiator p_idea_loop loopType="TrialHandler"
        loopType = random
        nReps = 1
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        Routine p_idea
      LoopTerminator p_idea_loop
    LoopTerminator byp_p_idea_loop
  LoopTerminator pract_byp
  LoopInitiator smry_byp loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine smry
  LoopTerminator smry_byp
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:5
    conditionsFile = stim/MR_AUT_items.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('MR_AUT_item', 'Gabel')]),
      OrderedDict([('MR_AUT_item', 'Bananenschale')]),
      OrderedDict([('MR_AUT_item', 'Tischtennisball')]),
      OrderedDict([('MR_AUT_item', 'Klopapier')]),
      OrderedDict([('MR_AUT_item', 'Stirnband')]),
      OrderedDict([('MR_AUT_item', 'Socke')]),
      OrderedDict([('MR_AUT_item', 'Blumenvase')]),
      OrderedDict([('MR_AUT_item', 'Lampe')]),
      OrderedDict([('MR_AUT_item', 'Hufeisen')]),
      OrderedDict([('MR_AUT_item', 'Knetmasse')]),
      OrderedDict([('MR_AUT_item', 'Konservendose')]),
      OrderedDict([('MR_AUT_item', 'Zahnbürste')]),
      OrderedDict([('MR_AUT_item', 'Bügeleisen')]),
      OrderedDict([('MR_AUT_item', 'Pflaster')]),
      OrderedDict([('MR_AUT_item', 'Kleiderhaken')]),
      OrderedDict([('MR_AUT_item', 'Autoreifen')]),
      OrderedDict([('MR_AUT_item', 'Spiegel')]),
      OrderedDict([('MR_AUT_item', 'Schaumstoffpolster')]),
      OrderedDict([('MR_AUT_item', 'Reisekoffer')]),
      OrderedDict([('MR_AUT_item', 'Badewanne')]),
      OrderedDict([('MR_AUT_item', 'Krawatte')]),
      OrderedDict([('MR_AUT_item', 'Frisbee')]),
      OrderedDict([('MR_AUT_item', 'Föhn')]),
      OrderedDict([('MR_AUT_item', 'Glocke')]),
      OrderedDict([('MR_AUT_item', 'Pinsel')]),
      OrderedDict([('MR_AUT_item', 'Gürtel')]),
      OrderedDict([('MR_AUT_item', 'Mülleimer')]),
      OrderedDict([('MR_AUT_item', 'Seil')]),
      OrderedDict([('MR_AUT_item', 'Locher')]),
      OrderedDict([('MR_AUT_item', 'Uhr')])]
    Routine t_item
    LoopInitiator item_loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine t_idea
    LoopTerminator item_loop
    Routine AUT_rating
    LoopInitiator rf_loop loopType="TrialHandler"
      loopType = sequential
      nReps = show_rf
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      Routine ruhe_fixation
    LoopTerminator rf_loop
  LoopTerminator trials
  Routine thx
