PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': '999', 'session': '77'}
  Force stereo = False
  Full-screen window = True
  Monitor = bw@office
  Screen = 2
  Units = height
  Use version = 2025.1.1
  Window size (pixels) = [2240, 1260]
  color = $[-1,-1,-1]
  consoleLoggingLevel = exp
  expName = MR_AUT
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine settings
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    CodeComponent set_things
      Code Type = Py
      Begin Experiment:
        ##  some start time info
        print(data.getDateStr(format="%H:%M:%S.%m"))   #local: set/mark start of current run

        ##  enable parallel port for markers  ##
        from psychopy import parallel
        t_mrk = parallel.ParallelPort(address='0x3FF8')

        wavDirName = '%s_%s_%s_%s_%s' % (os.path.join(_thisDir, 'data', ''), expInfo['participant'], expName, data.getDateStr(format="%Y-%m-%d_%H%M"), '_wav')
        if not os.path.isdir(wavDirName):
            os.makedirs(wavDirName)  # to hold .wav files
        #print(f"{wavDirName=}")

        ## ### Options for DEBUG/RESARCH-mode ###
        DEBUG = 1 #0=research-mode; 1=debug-mode
        if DEBUG:
            itemDur = 5
        else:
            itemDur = 15

        header_pos_y = .40
        main_pos_y   = 0
        btn_pos_y    = -.25
  Routine wait4scanner
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    TextComponent GOfromMRT_txt
      letterHeight = 0.025
      opacity [set every frame] = sin(3*t)+0.25
      startVal [time (s)] = 0.0
      text = ...awaiting clearance ('5') from the MRI-Scanner...
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    KeyboardComponent GOfromMRT_key
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AUT_rating
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    CodeComponent AUTrating_code
      Code Type = Py
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      End Routine:
        ##  marker: AUTrating STOP  ##
        t_mrk.setData(57); core.wait(0.1); t_mrk.setData(0)
    TextComponent r_header_txt
      letterHeight = 0.045
      pos = (0, header_pos_y)
      startVal [time (s)] = 0.0
      text = Wie kreativ findest Du Deine Antwort
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    SliderComponent VASrating
      color = black
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 0.7035
      pos = (0, main_pos_y)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = 0,1,2,3,4,5,6,7,8,9,10
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    KeyboardComponent r_end_key
      allowedKeys = 'w','return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent r1_mouse
      clickable = r1_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = VASrating.getMouseResponses() != None
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    BidsEventComponent bidsEvent_AUTselfrating plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      link_component = VASrating
      linked_attributes = ('Onset', 'Duration', 'Response Time')
      overwrite_linked = False
      trial_type = AUTselfrating
    TextComponent l_label
      color = darkgreen
      letterHeight = 0.03
      pos = (-.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = gar nicht kreativ
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    TextComponent r_label
      color = darkgreen
      letterHeight = 0.03
      pos = (.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = sehr kreativ
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    PolygonComponent r1_btn
      fillColor = $[1,1,1]
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
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    TextComponent rating_hint
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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  Routine insi_1
    RoutineSettingsComponent insi_1
      disabled = True
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    TextComponent qu_header_txt
      letterHeight = 0.035
      pos = (0, header_pos_y)
      startVal [time (s)] = 0.0
      text = Hattest Du das Gefühl eines Insights? (>"Ahhh!"-Moment<)
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    SliderComponent insight_qu
      color = darkgreen
      forceEndRoutine = True
      granularity = 0.1
      labels = "Ja", "Nein"
      letterHeight = 0.035
      size = (0.35, 0.025)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent hide_mse
      Code Type = Py
      End Routine:
        ##  hide mouse  ##
        win.mouseVisible = False
  Routine thx
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    TextComponent thx_txt
      durationEstim = 5
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Vielen Dank,

        dieser Teil der Untersuchung ist zu Ende.
    KeyboardComponent thx_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thx_hint
      color = $[-0.25,-0.25,-0.25]
      letterHeight = 0.025
      pos = (.25, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Beenden mit Enter
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  Routine AUT_item
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    ParallelOutComponent t_fix_mrk
      address = 0x3FF8
      register = EIO
      startData = 10
      startVal [time (s)] = 0
      stopData = 0
      stopVal [duration (s)] = 0.25
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent fix_code
      Code Type = Py
      Begin Routine:
        rand_dur = np.random.uniform(3, 9)
        trials.addData('rand_dur', rand_dur)
    TextComponent t_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rand_dur
      text = +
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    BidsEventComponent bidsEvent_fix plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      link_component = t_fixation
      linked_attributes = ('Onset', 'Duration')
      overwrite_linked = False
      trial_type = fixation
    ParallelOutComponent t_item_mrk
      address = 0x3FF8
      register = EIO
      startData = MR_AUTitem_mrk
      startVal [condition] = t_fixation.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.25
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent AUTitem
      letterHeight = 0.05
      startVal [condition] = t_fixation.status==FINISHED
      stopVal [duration (s)] = $itemDur
      text [set every repeat] = $MR_AUTitem
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    BidsEventComponent bidsEvent_AUTitem plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      link_component = AUTitem
      linked_attributes = ('Onset', 'Duration')
      overwrite_linked = False
      trial_type = AUTitem
    KeyboardComponent idea_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [condition] = AUTitem.status==STARTED
      stopVal [condition] = AUTitem.status==FINISHED
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    MouseComponent idea_mse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [condition] = AUTitem.status==STARTED
      stopVal [condition] = AUTitem.status==FINISHED
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    BidsEventComponent bidsEvent_idea plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      link_component = idea_mse
      linked_attributes = ('Onset', 'Duration', 'Response Time')
      overwrite_linked = False
      trial_type = idea
  Routine AUT_response
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    CodeComponent idea_code
      Code Type = Py
      Begin Experiment:
        import sounddevice as sd
        import soundfile as sf
        import time

        ## set audio recording parameters
        sample_rate = 44100  # Sample rate (Hz)
        channels = 1         # Number of audio channels (2 for stereo)

        ## get/access the keyboard
        t_kb = keyboard.Keyboard()

        ### safe stop stream  ##
        def safe_stop_stream(stream):                              # lukas
            ###Stop and close an input stream safely.###           # lukas
            if stream is not None:                                 # lukas
                try:                                               # lukas
                    stream.stop()                                  # lukas: safe stop
                finally:                                           # lukas
                    stream.close()                                 # lukas: safe close
            return None                                            # lukas: clear reference


        ###   save_recording   ###
        def save_recording(audio_data, recording_count, recordings_dir, sample_rate):
            ###Helper function to save a recording###
            if not audio_data:
                print("No audio data to save.")
                return False

            # Convert list of numpy arrays into one large numpy array
            recording = np.concatenate(audio_data, axis=0)

            ## prepare the recording
            # ## Generate filename with enumeration and timestamp
            # timestamp = datetime.now().strftime("%Y%m%d_%H%M%S")
            # timestamp = data.getDateStr(format="%Y-%m-%d_%H%M")   #local: set/mark start of current run
            #audio_file = os.path.join(wavDirName, f"{expInfo['Subject-ID']}_idea{recording_count:02d}_{timestamp}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'
            #audio_file = os.path.join(wavDirName, f"{expInfo['Subject-ID']}_{RITitems[trials.thisN][itm]}_idea{recording_count:02d}.wav")    #name the recording with 'sub.-ID', 'rec._count'
            #audio_file = os.path.join(wavDirName, f"{expInfo['Subject-ID']}_{MR_AUT_items}_idea{recording_count:02d}.wav")    #name the recording with 'sub.-ID', 'rec._count'
            audio_file = os.path.join(wavDirName, f"{expInfo['participant']}_{MR_AUTitem}.wav")    #name the recording with 'participant'/'sub.-ID'

            try:
                # Save the recording to a file
                sf.write(audio_file, recording, sample_rate)
                #print(f"Recording #{recording_count} saved to {audio_file}")
            except Exception as e:
                print(f"Error saving recording: {e}")
                return False

            return True
      Begin Routine:
        ##  recording flag  ##
        is_recording = False
        recording_started = False

        ##  Counter for recording enumeration
        recording_count = 1

        ##  get start-time for 't-...'-routine
        #t_startTime = core.getTime()

        ##t_mrk: START - (white/)blue '?' && ##t_mrk: 3min idea time START
        t_mrk.setData(49); core.wait(0.1); t_mrk.setData(0)

        ## Vor dem ersten Aufruf von getKeys() und getState() in "each frame"
        t_kb.clearEvents(eventType='keyboard')  # Lösche alle vorherigen Tasteneingaben

        audio_data = []
        stream = None

        ################################################################################

        """
        ##  flags for spacekey  ##
        #t_spacedown = False
        #t_spaceup = True

        is_recording = False

        ##  Counter for recording enumeration
        recording_count = 1

        ##  get start-time for 't-...'-routine
        t_startTime = core.getTime()

        #t_FZ.color = 'white'
        win.flip()

        ##t_mrk: START Nachdenkphase
        t_mrk.setData(50); core.wait(0.1); t_mrk.setData(0)


        ## Vor dem ersten Aufruf von getKeys() und getState() in "each frame"
        t_kb.clearEvents(eventType='keyboard')  # Lösche alle vorherigen Tasteneingaben
        """
      Each Frame:
        # Initialize recording on first call
        if not recording_started:
            recording_started = True

            # Display blue question mark
            t_FZ.color = 'darkgreen'
            #t_FZ.text = '?'
            win.flip()

            # Start audio recording
            audio_data = []
            try:
                stream = sd.InputStream(
                    samplerate=sample_rate,
                    channels=channels,
                    callback=lambda indata, frames, time, status: audio_data.append(indata.copy())
                )
                stream.start()

                # Send start marker
                t_mrk.setData(48); core.wait(0.1); t_mrk.setData(0)

            except Exception as e:
                print(f"Recording failed to start: {e}")
                continueRoutine = False

        # Check for exit keys
        keys = t_kb.getKeys()
        if keys and any(k.name == 'escape' for k in keys):
            safe_stop_stream(stream)
            continueRoutine = False

        # Check for spacebar to stop
        if t_kb.getState('space'):
            # Wait for release
            while t_kb.getState('space'):
                core.wait(0.01)

            # Stop and save
            safe_stop_stream(stream)

            if audio_data:
                #save_recording(audio_data, recording_count, wavDirName, sample_rate,
                #             expInfo['UPN-ID'], RITitems[trials.thisN][itm])
                save_recording(audio_data, recording_count, wavDirName, sample_rate)
                #             expInfo['UPN-ID'], RITitems[trials.thisN][itm])

            # Send stop marker
            t_mrk.setData(47); core.wait(0.1); t_mrk.setData(0)

            # Clear screen and finish
            t_FZ.text = ''
            win.flip()
            continueRoutine = False

        core.wait(0.01)

        #################################################################################################################################################################
        ##    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###   ##
        #################################################################################################################################################################

        """
        ##  check the loop-time  ##
        if core.getTime() > t_startTime + loopDur:
            ##t_mrk: STOP
            t_mrk.setData(49); core.wait(0.1); t_mrk.setData(0)
            save_recording(audio_data, recording_count, wavDirName, sample_rate)
            is_recording = False
            continueRoutine = False # finish p_trial

        ##  check for keypresses/-states  ##
        t_response = t_kb.getKeys() # get a list of keys pressed at this instant
        t_spacebar = t_kb.getState('space')

        ##  check for 'escape'
        if t_response:
            if 'escape' in t_response:
                continueRoutine = False


        ##  check the 'spacebar'-key responses  ##
        ## check for presses
        if t_spacebar:

            while t_spacebar: # and core.getTime() < t_startTime + t_loopDur:
            #while is_recording and core.getTime() < t_startTime + t_loopDur:
                time.sleep(0.01)                        # Small delay to prevent CPU overuse (from ai)
                t_spacebar = t_kb.getState('space')

            ##toggle recording state
            is_recording = not is_recording

            if is_recording:
                ##t_mrk: START
                t_mrk.setData(48); core.wait(0.1); t_mrk.setData(0)

                ## start recording / record audio stream
                audio_data = []

                #prev. ver: spacekey↓record-on>>spacekey↑-record-off # # # with sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: audio_data.append(indata.copy())):
                stream = sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: audio_data.append(indata.copy()))
                stream.start()

                ##after recording started, flip to green '?'
                t_FZ.color = 'green'
                win.flip()

            # Stop the current recording
            else:
                ##before recording stops, bakc to white '?'
                t_FZ.color = 'white'
                win.flip()

                ## stop recording / stop audio stream
                stream.stop()
                stream.close()
                if audio_data:
                    save_recording(audio_data, recording_count, wavDirName, sample_rate)
                    recording_count += 1
                    audio_data = []   # Nach der Speicherung
                else:
                    print("Recording too short - nothing saved")
                ##t_mrk: STOP
                t_mrk.setData(49); core.wait(0.1); t_mrk.setData(0)


            # Check if we've reached the time limit
            if core.getTime() > t_startTime + loopDur and is_recording:
                # Stop recording if we hit the time limit during a recording
                stream.stop()
                stream.close()
                if audio_data:
                    save_recording(audio_data, recording_count, wavDirName, sample_rate)
                    recording_count += 1
                    audio_data = []   # Nach der Speicherung
                ##t_mrk: STOP
                t_mrk.setData(49); core.wait(0.1); t_mrk.setData(0)

                print("Program time limit reached during recording")

            time.sleep(0.01)  # Small delay in main loop to prevent CPU overuse


        ###   save_recording   ###
        def save_recording(audio_data, recording_count, recordings_dir, sample_rate):
            ###Helper function to save a recording###
            if not audio_data:
                return False

            # Convert list of numpy arrays into one large numpy array
            recording = np.concatenate(audio_data, axis=0)

            ## prepare the recording
            # ## Generate filename with enumeration and timestamp
            # timestamp = datetime.now().strftime("%Y%m%d_%H%M%S")
            # timestamp = data.getDateStr(format="%Y-%m-%d_%H%M")   #local: set/mark start of current run
            #audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_idea{recording_count:02d}_{timestamp}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'
            audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_{all_items[trials.thisN][0]}_idea{recording_count:02d}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'

            # Save the recording to a file
            sf.write(audio_file, recording, sample_rate)
            print(f"Recording #{recording_count} saved to {audio_file}")
            return True
        """

        #################################################################################################################################################################
        ##    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###    ###   ##
        #################################################################################################################################################################

        """
        ## ### check the loop-time ###
        if core.getTime() > t_startTime + loopDur:
            continueRoutine = False # finish p_trial

        ## ### check for keypresses ###
        t_response = t_kb.getKeys() # get a list of keys pressed at this instant
        t_spacebar = t_kb.getState('space')

        ## check for 'escape'
        if t_response:
            if 'escape' in t_response:
                continueRoutine = False


        ##  check the 'spacebar'-key responses  ##
        ## check for presses
        if t_spacebar and not t_spacedown:
            if not t_spacedown:
                t_spacedown = True
                t_spaceup = False
                t_FZ.color = 'green'
                win.flip()

            ## prepare the recording
            # timestamp = data.getDateStr(format="%Y-%m-%d_%H%M")   #local: set/mark start of current run
            #audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_idea{recording_count:02d}_{timestamp}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'
            audio_file = os.path.join(wavDirName, f"{expInfo['UPN-ID']}_{all_items[trials.thisN][0]}_idea{recording_count:02d}.wav")    #name the recording with 'sub.-ID', timestamp' + 'rec._count'

            ## start recording
            audio_data = []

            # Record audio stream
            with sd.InputStream(samplerate=sample_rate, channels=channels, callback=lambda indata, frames, time, status: audio_data.append(indata.copy())):
                ## Continue recording until spacebar is released or loop-time is over
                while t_spacebar and core.getTime() < t_startTime + loopDur:
                    time.sleep(0.01)  # Small delay to prevent CPU overuse
                    t_spacebar = p_kb.getState('space')

            if audio_data:
                ## Convert list of numpy arrays into one large numpy array
                recording = np.concatenate(audio_data, axis=0)

                ## Save the recording to a file
                sf.write(audio_file, recording, sample_rate)
                recording_count += 1  # Increment the recording counter
            else:
                print("Recording too short - nothing saved")


        ## check for releases
        elif not t_spacebar and not t_spaceup:
            t_spacedown = False
            t_spaceup = True
            t_FZ.color = 'white'
            win.flip()
        """
      End Routine:
        ##  show mouse  ##
        win.mouseVisible = True
    TextComponent FZ
      color = green
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = ?
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    BidsEventComponent bidsEvent_recordStop plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      disabled = True
      linked_attributes = ()
      overwrite_linked = False
      trial_type = idea_recordStop
  Routine AUT_insight
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    CodeComponent insi_code
      Code Type = Py
      Begin Routine:
        show_insi_intensity = 0
        label_color = 'black'
        marker_color = 'black'
        line_color = 'black'
      Each Frame:
        pos_insi_rating = insi_possible.getRating()
        if pos_insi_rating == 'Ja':
            show_insi_intensity = 1
            label_color = 'darkgreen'
            marker_color = 'red'
            line_color = 'white'
        elif pos_insi_rating == 'Nein' or pos_insi_rating == 'Weiß nicht':
            show_insi_intensity = 0
            label_color = 'black'
            marker_color = 'black'
            line_color = 'black'
      End Routine:
        ##  marker: insight_rating STOP  ##
        t_mrk.setData(59); core.wait(0.1); t_mrk.setData(0)

        ##  hide mouse  ##
        win.mouseVisible = False
    TextComponent insi_possible_header
      letterHeight = 0.035
      pos = (0, header_pos_y)
      startVal [time (s)] = 0.0
      text = Hattest Du das Gefühl eines Insights? (>"Ahhh!"-Moment<)
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    SliderComponent insi_possible
      color = darkgreen
      forceEndRoutine = False
      labels = "Ja", "Nein", "Weiß nicht"
      letterHeight = 0.025
      pos = (0, 0.1)
      size = (0.5, 0.025)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    BidsEventComponent bidsEvent_possible_insi plugin="psychopy-bids"
      add_log = False
      bids_event_type = TaskEvent
      link_component = insi_possible
      linked_attributes = ('Onset', 'Duration', 'Response Time', 'Event Type')
      overwrite_linked = False
      trial_type = possible_insight
    TextComponent insi_intensity_txt
      letterHeight = 0.03
      opacity [set every frame] = show_insi_intensity
      pos = (0, -0.09)
      startVal [time (s)] = 0
      text = Wenn JA, wie stark war dieses Gefühl (1-10):
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    SliderComponent insi_intensity
      borderColor [set every frame] = $line_color
      color [set every frame] = $label_color
      fillColor [set every frame] = $marker_color
      forceEndRoutine = False
      granularity = 1
      labels = "sehr\nschwach ", "sehr\nstark"
      letterHeight = 0.025
      opacity [set every frame] = show_insi_intensity
      pos = (0, -0.15)
      size = (1.0, 0.025)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    PolygonComponent insi_btn
      fillColor = white
      pos = (0, -.4)
      shape = rectangle
      size = (0.15, 0.045)
      startVal [time (s)] = 0.0
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    TextComponent insi_btn_txt
      color = black
      letterHeight = 0.025
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent insi_mse
      clickable = insi_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    BidsEventComponent bidsEvent_intensity_insi plugin="psychopy-bids"
      add_log = False
      bids_duration = 1
      bids_event_type = TaskEvent
      link_component = insi_intensity
      linked_attributes = ('Onset', 'Duration', 'Response Time')
      overwrite_linked = True
      trial_type = inisght_intensity
  BidsExportRoutine AUT_data_bidsExport
    add_code = True
    add_environment = True
    add_stimuli = True
    bids_license = CC-BY-4.0
    data_type = func
    dataset_name = MR_AUT_BIDS
    generate_hed_metadata = True
    runs = True
Flow
  Routine settings
  LoopInitiator wait4scanner_byp loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine wait4scanner
  LoopTerminator wait4scanner_byp
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 2:7
    conditionsFile = stim/MR_AUT_items.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('MR_AUTitem', 'Autoreifen'), ('MR_AUTitem_mrk', np.int64(101))]),
      OrderedDict([('MR_AUTitem', 'Badewanne'), ('MR_AUTitem_mrk', np.int64(102))]),
      OrderedDict([('MR_AUTitem', 'Bananenschale'), ('MR_AUTitem_mrk', np.int64(103))]),
      OrderedDict([('MR_AUTitem', 'Blumenvase'), ('MR_AUTitem_mrk', np.int64(104))]),
      OrderedDict([('MR_AUTitem', 'Bügeleisen'), ('MR_AUTitem_mrk', np.int64(105))]),
      OrderedDict([('MR_AUTitem', 'Föhn'), ('MR_AUTitem_mrk', np.int64(106))]),
      OrderedDict([('MR_AUTitem', 'Frisbee'), ('MR_AUTitem_mrk', np.int64(107))]),
      OrderedDict([('MR_AUTitem', 'Gabel'), ('MR_AUTitem_mrk', np.int64(108))]),
      OrderedDict([('MR_AUTitem', 'Glocke'), ('MR_AUTitem_mrk', np.int64(109))]),
      OrderedDict([('MR_AUTitem', 'Gürtel'), ('MR_AUTitem_mrk', np.int64(110))]),
      OrderedDict([('MR_AUTitem', 'Hufeisen'), ('MR_AUTitem_mrk', np.int64(111))]),
      OrderedDict([('MR_AUTitem', 'Kleiderhaken'), ('MR_AUTitem_mrk', np.int64(112))]),
      OrderedDict([('MR_AUTitem', 'Klopapier'), ('MR_AUTitem_mrk', np.int64(113))]),
      OrderedDict([('MR_AUTitem', 'Knetmasse'), ('MR_AUTitem_mrk', np.int64(114))]),
      OrderedDict([('MR_AUTitem', 'Konservendose'), ('MR_AUTitem_mrk', np.int64(115))]),
      OrderedDict([('MR_AUTitem', 'Krawatte'), ('MR_AUTitem_mrk', np.int64(116))]),
      OrderedDict([('MR_AUTitem', 'Lampe'), ('MR_AUTitem_mrk', np.int64(117))]),
      OrderedDict([('MR_AUTitem', 'Locher'), ('MR_AUTitem_mrk', np.int64(118))]),
      OrderedDict([('MR_AUTitem', 'Mülleimer'), ('MR_AUTitem_mrk', np.int64(119))])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
    Routine AUT_item
    LoopInitiator item_loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine AUT_response
    LoopTerminator item_loop
    Routine AUT_rating
    Routine insi_1
    Routine AUT_insight
  LoopTerminator trials
  Routine thx
  BidsExportRoutine AUT_data_bidsExport
